---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 25
set font_italic no
set font_family "chinese-japanese-korean"
set font_bold no
set experiment_path "C:\\Users\\Kihyo Park\\Desktop\\Memory"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background black

define sketchpad exp
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp]" x=0 y=0 z_index=0

define sketchpad expISI
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_1_1
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_2
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall_1
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall_1_1
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall_1_1_1
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall_1_1_1_1
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall_1_1_1_2
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall_1_1_1_3
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad expISI_recall_1_1_1_3_1
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sequence expSeq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI always
	run exp always

define sequence expSeqRecall
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall always
	run exp_recall always

define sequence expSeqRecall_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall_1 always
	run exp_recall_1 always

define sequence expSeqRecall_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall_1_1 always
	run exp_recall_1_1 always

define sequence expSeqRecall_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall_1_1_1 always
	run exp_recall_1_1_1 always

define sequence expSeqRecall_1_1_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall_1_1_1_1 always
	run exp_recall_1_1_1_1 always

define sequence expSeqRecall_1_1_1_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall_1_1_1_2 always
	run exp_recall_1_1_1_2 always

define sequence expSeq_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_1 always
	run exp_1 always

define sequence expSeq_1_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_1_1 always
	run exp_1_1 always

define sequence expSeq_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_2 always
	run exp_2 always

define sketchpad exp_1
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp]" x=0 y=0 z_index=0

define sketchpad exp_1_1
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp]" x=0 y=0 z_index=0

define sketchpad exp_2
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp]" x=0 y=0 z_index=0

define sketchpad exp_recall
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sketchpad exp_recall_1
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sketchpad exp_recall_1_1
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sketchpad exp_recall_1_1_1
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sketchpad exp_recall_1_1_1_1
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sketchpad exp_recall_1_1_1_2
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sketchpad exp_recall_1_1_1_3
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sketchpad exp_recall_1_1_1_3_1
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[exp_recall]" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction always
	run start always
	run experiment_loop1 always
	run pause1 always
	run experiment_loop_recall1 always
	run goodbye1 always
	run experiment_loop2 always
	run pause2 always
	run experiment_loop_recall2 always
	run goodbye2 always
	run experiment_loop3 always
	run pause3 always
	run experiment_loop_recall3 always
	run goodbye3 always
	run experiment_loop4 always
	run pause4 always
	run experiment_loop_recall4 always
	run goodbye4 always
	run expriment_loop5 always
	run pause5 always
	run expriment_loop5_recall5 always
	run goodbye5 always
	run farewell always

define loop experiment_loop1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp "소나기-사전"
	setcycle 1 exp "서랍-원숭이"
	setcycle 2 exp "손잡이-위법"
	setcycle 3 exp "이혼-잔디밭"
	setcycle 4 exp "전화기-진달래"
	setcycle 5 exp "전문직-휴지"
	setcycle 6 exp "채점-효도"
	setcycle 7 exp "결혼식-간호사"
	setcycle 8 exp "일회용-갈스뚝"
	setcycle 9 exp "제출-굴랴찌"
	setcycle 10 exp "관람객-지머이"
	setcycle 11 exp "바가지-쥐다치"
	setcycle 12 exp "비행장-크니가"
	setcycle 13 exp "엽서-삘르"
	setcycle 14 exp "전기-리까"
	setcycle 15 exp "위험성-루취까"
	run expSeq

define loop experiment_loop2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp "소나기-사전"
	setcycle 1 exp "서랍-원숭이"
	setcycle 2 exp "손잡이-위법"
	setcycle 3 exp "이혼-잔디밭"
	setcycle 4 exp "전화기-진달래"
	setcycle 5 exp "전문직-휴지"
	setcycle 6 exp "채점-효도"
	setcycle 7 exp "결혼식-간호사"
	setcycle 8 exp "일회용-갈스뚝"
	setcycle 9 exp "제출-굴랴찌"
	setcycle 10 exp "관람객-지머이"
	setcycle 11 exp "바가지-쥐다치"
	setcycle 12 exp "비행장-크니가"
	setcycle 13 exp "엽서-삘르"
	setcycle 14 exp "전기-리까"
	setcycle 15 exp "위험성-루취까"
	run expSeq_1

define loop experiment_loop3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp "소나기-사전"
	setcycle 1 exp "서랍-원숭이"
	setcycle 2 exp "손잡이-위법"
	setcycle 3 exp "이혼-잔디밭"
	setcycle 4 exp "전화기-진달래"
	setcycle 5 exp "전문직-휴지"
	setcycle 6 exp "채점-효도"
	setcycle 7 exp "결혼식-간호사"
	setcycle 8 exp "일회용-갈스뚝"
	setcycle 9 exp "제출-굴랴찌"
	setcycle 10 exp "관람객-지머이"
	setcycle 11 exp "바가지-쥐다치"
	setcycle 12 exp "비행장-크니가"
	setcycle 13 exp "엽서-삘르"
	setcycle 14 exp "전기-리까"
	setcycle 15 exp "위험성-루취까"
	run expSeq_2

define loop experiment_loop4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp "소나기-사전"
	setcycle 1 exp "서랍-원숭이"
	setcycle 2 exp "손잡이-위법"
	setcycle 3 exp "이혼-잔디밭"
	setcycle 4 exp "전화기-진달래"
	setcycle 5 exp "전문직-휴지"
	setcycle 6 exp "채점-효도"
	setcycle 7 exp "결혼식-간호사"
	setcycle 8 exp "일회용-갈스뚝"
	setcycle 9 exp "제출-굴랴찌"
	setcycle 10 exp "관람객-지머이"
	setcycle 11 exp "바가지-쥐다치"
	setcycle 12 exp "비행장-크니가"
	setcycle 13 exp "엽서-삘르"
	setcycle 14 exp "전기-리까"
	setcycle 15 exp "위험성-루취까"
	run expSeq_1_1

define loop experiment_loop5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp "소나기-사전"
	setcycle 1 exp "서랍-원숭이"
	setcycle 2 exp "손잡이-위법"
	setcycle 3 exp "이혼-잔디밭"
	setcycle 4 exp "전화기-진달래"
	setcycle 5 exp "전문직-휴지"
	setcycle 6 exp "채점-효도"
	setcycle 7 exp "결혼식-간호사"
	setcycle 8 exp "일회용-갈스뚝"
	setcycle 9 exp "제출-굴랴찌"
	setcycle 10 exp "관람객-지머이"
	setcycle 11 exp "바가지-쥐다치"
	setcycle 12 exp "비행장-크니가"
	setcycle 13 exp "엽서-삘르"
	setcycle 14 exp "전기-리까"
	setcycle 15 exp "위험성-루취까"
	run expSeqRecall_1_1_1_1

define loop experiment_loop_recall1
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp_recall "소나기-사전"
	setcycle 1 exp_recall "서랍-원숭이"
	setcycle 2 exp_recall "손잡이-위법"
	setcycle 3 exp_recall "이혼-잔디밭"
	setcycle 4 exp_recall "전화기-진달래"
	setcycle 5 exp_recall "전문직-휴지"
	setcycle 6 exp_recall "채점-효도"
	setcycle 7 exp_recall "결혼식-간호사"
	setcycle 8 exp_recall "일회용-갈스뚝"
	setcycle 9 exp_recall "제출-굴랴찌"
	setcycle 10 exp_recall "관람객-지머이"
	setcycle 11 exp_recall "바가지-쥐다치"
	setcycle 12 exp_recall "비행장-크니가"
	setcycle 13 exp_recall "엽서-삘르"
	setcycle 14 exp_recall "전기-리까"
	setcycle 15 exp_recall "위험성-루취까"
	run expSeqRecall

define loop experiment_loop_recall2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp_recall "소나기-사전"
	setcycle 1 exp_recall "서랍-원숭이"
	setcycle 2 exp_recall "손잡이-위법"
	setcycle 3 exp_recall "이혼-잔디밭"
	setcycle 4 exp_recall "전화기-진달래"
	setcycle 5 exp_recall "전문직-휴지"
	setcycle 6 exp_recall "채점-효도"
	setcycle 7 exp_recall "결혼식-간호사"
	setcycle 8 exp_recall "일회용-갈스뚝"
	setcycle 9 exp_recall "제출-굴랴찌"
	setcycle 10 exp_recall "관람객-지머이"
	setcycle 11 exp_recall "바가지-쥐다치"
	setcycle 12 exp_recall "비행장-크니가"
	setcycle 13 exp_recall "엽서-삘르"
	setcycle 14 exp_recall "전기-리까"
	setcycle 15 exp_recall "위험성-루취까"
	run expSeqRecall_1

define loop experiment_loop_recall3
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp_recall "소나기-사전"
	setcycle 1 exp_recall "서랍-원숭이"
	setcycle 2 exp_recall "손잡이-위법"
	setcycle 3 exp_recall "이혼-잔디밭"
	setcycle 4 exp_recall "전화기-진달래"
	setcycle 5 exp_recall "전문직-휴지"
	setcycle 6 exp_recall "채점-효도"
	setcycle 7 exp_recall "결혼식-간호사"
	setcycle 8 exp_recall "일회용-갈스뚝"
	setcycle 9 exp_recall "제출-굴랴찌"
	setcycle 10 exp_recall "관람객-지머이"
	setcycle 11 exp_recall "바가지-쥐다치"
	setcycle 12 exp_recall "비행장-크니가"
	setcycle 13 exp_recall "엽서-삘르"
	setcycle 14 exp_recall "전기-리까"
	setcycle 15 exp_recall "위험성-루취까"
	run expSeqRecall_1_1

define loop experiment_loop_recall4
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp_recall "소나기-사전"
	setcycle 1 exp_recall "서랍-원숭이"
	setcycle 2 exp_recall "손잡이-위법"
	setcycle 3 exp_recall "이혼-잔디밭"
	setcycle 4 exp_recall "전화기-진달래"
	setcycle 5 exp_recall "전문직-휴지"
	setcycle 6 exp_recall "채점-효도"
	setcycle 7 exp_recall "결혼식-간호사"
	setcycle 8 exp_recall "일회용-갈스뚝"
	setcycle 9 exp_recall "제출-굴랴찌"
	setcycle 10 exp_recall "관람객-지머이"
	setcycle 11 exp_recall "바가지-쥐다치"
	setcycle 12 exp_recall "비행장-크니가"
	setcycle 13 exp_recall "엽서-삘르"
	setcycle 14 exp_recall "전기-리까"
	setcycle 15 exp_recall "위험성-루취까"
	run expSeqRecall_1_1_1

define loop experiment_loop_recall5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp_recall "소나기-사전"
	setcycle 1 exp_recall "서랍-원숭이"
	setcycle 2 exp_recall "손잡이-위법"
	setcycle 3 exp_recall "이혼-잔디밭"
	setcycle 4 exp_recall "전화기-진달래"
	setcycle 5 exp_recall "전문직-휴지"
	setcycle 6 exp_recall "채점-효도"
	setcycle 7 exp_recall "결혼식-간호사"
	setcycle 8 exp_recall "일회용-갈스뚝"
	setcycle 9 exp_recall "제출-굴랴찌"
	setcycle 10 exp_recall "관람객-지머이"
	setcycle 11 exp_recall "바가지-쥐다치"
	setcycle 12 exp_recall "비행장-크니가"
	setcycle 13 exp_recall "엽서-삘르"
	setcycle 14 exp_recall "전기-리까"
	setcycle 15 exp_recall "위험성-루취까"
	run expSeqRecall_1_1_1_2

define loop expriment_loop5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp_recall "소나기-사전"
	setcycle 1 exp_recall "서랍-원숭이"
	setcycle 2 exp_recall "손잡이-위법"
	setcycle 3 exp_recall "이혼-잔디밭"
	setcycle 4 exp_recall "전화기-진달래"
	setcycle 5 exp_recall "전문직-휴지"
	setcycle 6 exp_recall "채점-효도"
	setcycle 7 exp_recall "결혼식-간호사"
	setcycle 8 exp_recall "일회용-갈스뚝"
	setcycle 9 exp_recall "제출-굴랴찌"
	setcycle 10 exp_recall "관람객-지머이"
	setcycle 11 exp_recall "바가지-쥐다치"
	setcycle 12 exp_recall "비행장-크니가"
	setcycle 13 exp_recall "엽서-삘르"
	setcycle 14 exp_recall "전기-리까"
	setcycle 15 exp_recall "위험성-루취까"
	run new_sequence

define loop expriment_loop5_recall5
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 exp_recall "소나기-사전"
	setcycle 1 exp_recall "서랍-원숭이"
	setcycle 2 exp_recall "손잡이-위법"
	setcycle 3 exp_recall "이혼-잔디밭"
	setcycle 4 exp_recall "전화기-진달래"
	setcycle 5 exp_recall "전문직-휴지"
	setcycle 6 exp_recall "채점-효도"
	setcycle 7 exp_recall "결혼식-간호사"
	setcycle 8 exp_recall "일회용-갈스뚝"
	setcycle 9 exp_recall "제출-굴랴찌"
	setcycle 10 exp_recall "관람객-지머이"
	setcycle 11 exp_recall "바가지-쥐다치"
	setcycle 12 exp_recall "비행장-크니가"
	setcycle 13 exp_recall "엽서-삘르"
	setcycle 14 exp_recall "전기-리까"
	setcycle 15 exp_recall "위험성-루취까"
	run new_sequence_1

define sketchpad farewell
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="실험이 끝났습니다. 감사합니다!" x=0 y=0 z_index=0

define sketchpad goodbye1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="끝!" x=0 y=0 z_index=0

define sketchpad goodbye2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="끝!" x=0 y=0 z_index=0

define sketchpad goodbye3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="끝!" x=0 y=0 z_index=0

define sketchpad goodbye4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="끝!" x=0 y=0 z_index=0

define sketchpad goodbye5
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="끝!" x=0 y=0 z_index=0

define sketchpad instruction
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="실험에 참여해주셔서 감사합니다!<br /><br />여러분은 두개의 단어로 된 단어쌍을 볼 것입니다.<br /><br />예를 들어, 단어쌍들은 이 화면에서 '비행기-사과'와 같은 방식으로 나타날 것입니다.<br /><br />여러분에게 주어진 과제는 화면에 나오는 단어쌍들을 최대한 많이 외우는 것입니다.<br /><br />단, 단어쌍들을 끝까지 모두 다 볼 때까지 별도의 지시가 주어지지 않는 이상, 박자기에 나는 소리에 맞추어 손으로 허벅지를 톡톡 쳐주세요. <br /><br /> 준비가 되면 진행자에게 말씀해주세요." x=0 y=0 z_index=0

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall_1_1_1_3 always
	run exp_recall_1_1_1_3 always

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run expISI_recall_1_1_1_3_1 always
	run exp_recall_1_1_1_3_1 always

define sketchpad pause1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="실험진행자의 지시가 있을 때까지 계속 치세요.<br /><br />" x=0 y=0 z_index=0

define sketchpad pause2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="실험진행자의 지시가 있을 때까지 계속 치세요.<br /><br />" x=0 y=0 z_index=0

define sketchpad pause3
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="실험진행자의 지시가 있을 때까지 계속 치세요.<br /><br />" x=0 y=0 z_index=0

define sketchpad pause4
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="실험진행자의 지시가 있을 때까지 계속 치세요.<br /><br />" x=0 y=0 z_index=0

define sketchpad pause5
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
define sketchpad pracISI
	set duration 2000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad pracISI_recall
	set duration 4000
	set description "Displays stimuli"
	draw image center=1 file="Fixation (white).png" scale=1 show_if=always x=0 y=0 z_index=0

define sketchpad practice
	set duration 2000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[practice]" x=0 y=0 z_index=0

define sequence practiceSeq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pracISI always
	run practice always

define sequence practiceSeqRecall
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pracISI_recall always
	run practice_recall always

define sketchpad practice_recall
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=50 html=yes show_if=always text="[practice_recall]" x=0 y=0 z_index=0

define loop pratice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice "전쟁-비닐"
	setcycle 1 practice "난로-수학"
	setcycle 2 practice "볼펜-철근"
	setcycle 3 practice "인사-빨대"
	setcycle 4 practice "티켓-빌례뜨"
	setcycle 5 practice "음식-블류다"
	setcycle 6 practice "빨리-븨스트라"
	setcycle 7 practice "친구-드룩"
	run practiceSeq

define loop pratice_loop_recall
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 16
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice_recall "전쟁-비닐"
	setcycle 1 practice_recall "난로-수학"
	setcycle 2 practice_recall "볼펜-철근"
	setcycle 3 practice_recall "인사-빨대"
	setcycle 4 practice_recall "목도리-건조대"
	setcycle 5 practice_recall "거북이-기상청"
	setcycle 6 practice_recall "뱃놀이-미장원"
	setcycle 7 practice_recall "경운기-노래"
	setcycle 8 practice_recall "티켓-빌례뜨"
	setcycle 9 practice_recall "음식-블류다"
	setcycle 10 practice_recall "빨리-븨스트라"
	setcycle 11 practice_recall "친구-드룩"
	setcycle 12 practice_recall "게임-이그라"
	setcycle 13 practice_recall "고양이-꼬쉬까"
	setcycle 14 practice_recall "보통-아븨치나"
	setcycle 15 practice_recall "생선-릐바"
	run practiceSeqRecall

define sketchpad start
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="chinese-japanese-korean" font_italic=no font_size=25 html=yes show_if=always text="본 실험에선 단어쌍들을 모두 외울 때까지 최대 5번까지 반복할 것입니다. <br /> <br /> 준비가 되면 말씀해주세요." x=0 y=0 z_index=0

